PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1920, 1080]
  expName = VSS Task
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextboxComponent vsstask
      autoLog = False
      bold = True
      editable = False
      fillColor [set every repeat] = $Background
      letterHeight = 0.3
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Combined
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    MicrophoneComponent mic
      channels = auto
      device = 5
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      transcribe = True
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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  Routine Instructions
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    TextComponent instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = If background is Blue say the letter, if it is Orange say the Number
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine vssins
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    TextComponent VSSInstructions
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = If background is Blue say the letter, if it is Orange say the Number
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  Routine PleaseWait
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    KeyboardComponent MRI_input_trigger
      allowedKeys = 't', 'T'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PleaseWaitToStart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please Wait
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  Routine BlockRest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Please Wait

        Do Not Move
  Routine Waittime
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    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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  Routine halfsecfix
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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Flow
  Routine Instructions
  LoopInitiator Run_repeat loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine PleaseWait
    Routine Waittime
    LoopInitiator Runs loopType="TrialHandler"
      isTrials = False
      loopType = fullRandom
      nReps = 1
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      LoopInitiator VSSBlockRepeat1 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator VSSBlock1 loopType="TrialHandler"
          Selected rows = $random(12)*503
          conditionsFile = Task Setup Files/VSS_PsychoPy_Task_Parameters_Use_This_One.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'Background': 'Blue', 'Combined': 'A1'},
            {'Background': 'Blue', 'Combined': 'A2'},
            {'Background': 'Blue', 'Combined': 'A3'},
            {'Background': 'Blue', 'Combined': 'A4'},
            {'Background': 'Blue', 'Combined': 'A5'},
            {'Background': 'Blue', 'Combined': 'A6'},
            {'Background': 'Blue', 'Combined': 'A7'},
            {'Background': 'Blue', 'Combined': 'A8'},
            {'Background': 'Blue', 'Combined': 'A9'},
            {'Background': 'Orange', 'Combined': 'A1'},
            {'Background': 'Orange', 'Combined': 'A2'},
            {'Background': 'Orange', 'Combined': 'A3'},
            {'Background': 'Orange', 'Combined': 'A4'},
            {'Background': 'Orange', 'Combined': 'A5'},
            {'Background': 'Orange', 'Combined': 'A6'},
            {'Background': 'Orange', 'Combined': 'A7'},
            {'Background': 'Orange', 'Combined': 'A8'},
            {'Background': 'Orange', 'Combined': 'A9'},
            {'Background': 'Blue', 'Combined': 'B1'},
            {'Background': 'Blue', 'Combined': 'B2'},
            {'Background': 'Blue', 'Combined': 'B3'},
            {'Background': 'Blue', 'Combined': 'B4'},
            {'Background': 'Blue', 'Combined': 'B5'},
            {'Background': 'Blue', 'Combined': 'B6'},
            {'Background': 'Blue', 'Combined': 'B7'},
            {'Background': 'Blue', 'Combined': 'B8'},
            {'Background': 'Blue', 'Combined': 'B9'},
            {'Background': 'Orange', 'Combined': 'B1'},
            {'Background': 'Orange', 'Combined': 'B2'},
            {'Background': 'Orange', 'Combined': 'B3'},
            {'Background': 'Orange', 'Combined': 'B4'},
            {'Background': 'Orange', 'Combined': 'B5'},
            {'Background': 'Orange', 'Combined': 'B6'},
            {'Background': 'Orange', 'Combined': 'B7'},
            {'Background': 'Orange', 'Combined': 'B8'},
            {'Background': 'Orange', 'Combined': 'B9'}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
          Routine trial
          Routine halfsecfix
        LoopTerminator VSSBlock1
        Routine BlockRest
      LoopTerminator VSSBlockRepeat1
      LoopInitiator VSSBlockRepeat2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator VSSBlock2 loopType="TrialHandler"
          Selected rows = $random(12)*503
          conditionsFile = Task Setup Files/VSS_PsychoPy_Task_Parameters_Use_This_One.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
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          Routine trial
          Routine halfsecfix
        LoopTerminator VSSBlock2
        Routine BlockRest
      LoopTerminator VSSBlockRepeat2
      LoopInitiator LetterBlockRepeat1 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator LetterBlock1 loopType="TrialHandler"
          Selected rows = $random(12)*503
          conditionsFile = Task Setup Files/LetterNaming.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'Background': 'Blue', 'Combined': 'A1'},
            {'Background': 'Blue', 'Combined': 'A2'},
            {'Background': 'Blue', 'Combined': 'A3'},
            {'Background': 'Blue', 'Combined': 'A4'},
            {'Background': 'Blue', 'Combined': 'A5'},
            {'Background': 'Blue', 'Combined': 'A6'},
            {'Background': 'Blue', 'Combined': 'A7'},
            {'Background': 'Blue', 'Combined': 'A8'},
            {'Background': 'Blue', 'Combined': 'A9'},
            {'Background': 'Blue', 'Combined': 'A1'},
            {'Background': 'Blue', 'Combined': 'A2'},
            {'Background': 'Blue', 'Combined': 'A3'},
            {'Background': 'Blue', 'Combined': 'A4'},
            {'Background': 'Blue', 'Combined': 'A5'},
            {'Background': 'Blue', 'Combined': 'A6'},
            {'Background': 'Blue', 'Combined': 'A7'},
            {'Background': 'Blue', 'Combined': 'A8'},
            {'Background': 'Blue', 'Combined': 'A9'},
            {'Background': 'Blue', 'Combined': 'B1'},
            {'Background': 'Blue', 'Combined': 'B2'},
            {'Background': 'Blue', 'Combined': 'B3'},
            {'Background': 'Blue', 'Combined': 'B4'},
            {'Background': 'Blue', 'Combined': 'B5'},
            {'Background': 'Blue', 'Combined': 'B6'},
            {'Background': 'Blue', 'Combined': 'B7'},
            {'Background': 'Blue', 'Combined': 'B8'},
            {'Background': 'Blue', 'Combined': 'B9'},
            {'Background': 'Blue', 'Combined': 'B1'},
            {'Background': 'Blue', 'Combined': 'B2'},
            {'Background': 'Blue', 'Combined': 'B3'},
            {'Background': 'Blue', 'Combined': 'B4'},
            {'Background': 'Blue', 'Combined': 'B5'},
            {'Background': 'Blue', 'Combined': 'B6'},
            {'Background': 'Blue', 'Combined': 'B7'},
            {'Background': 'Blue', 'Combined': 'B8'},
            {'Background': 'Blue', 'Combined': 'B9'},
            {'Background': 'Blue', 'Combined': 'C1'}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
          Routine trial
          Routine halfsecfix
        LoopTerminator LetterBlock1
        Routine BlockRest
      LoopTerminator LetterBlockRepeat1
      LoopInitiator LetterBlockRepeat2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator LetterBlock2 loopType="TrialHandler"
          Selected rows = $random(12)*503
          conditionsFile = Task Setup Files/LetterNaming.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
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          Routine trial
          Routine halfsecfix
        LoopTerminator LetterBlock2
        Routine BlockRest
      LoopTerminator LetterBlockRepeat2
      LoopInitiator NumberBlockRepeat1 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator NumberBlock1 loopType="TrialHandler"
          Selected rows = $random(12)*503
          conditionsFile = Task Setup Files/NumberNaming.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'Background': 'Orange', 'Combined': 'A1'},
            {'Background': 'Orange', 'Combined': 'A2'},
            {'Background': 'Orange', 'Combined': 'A3'},
            {'Background': 'Orange', 'Combined': 'A4'},
            {'Background': 'Orange', 'Combined': 'A5'},
            {'Background': 'Orange', 'Combined': 'A6'},
            {'Background': 'Orange', 'Combined': 'A7'},
            {'Background': 'Orange', 'Combined': 'A8'},
            {'Background': 'Orange', 'Combined': 'A9'},
            {'Background': 'Orange', 'Combined': 'A1'},
            {'Background': 'Orange', 'Combined': 'A2'},
            {'Background': 'Orange', 'Combined': 'A3'},
            {'Background': 'Orange', 'Combined': 'A4'},
            {'Background': 'Orange', 'Combined': 'A5'},
            {'Background': 'Orange', 'Combined': 'A6'},
            {'Background': 'Orange', 'Combined': 'A7'},
            {'Background': 'Orange', 'Combined': 'A8'},
            {'Background': 'Orange', 'Combined': 'A9'},
            {'Background': 'Orange', 'Combined': 'B1'},
            {'Background': 'Orange', 'Combined': 'B2'},
            {'Background': 'Orange', 'Combined': 'B3'},
            {'Background': 'Orange', 'Combined': 'B4'},
            {'Background': 'Orange', 'Combined': 'B5'},
            {'Background': 'Orange', 'Combined': 'B6'},
            {'Background': 'Orange', 'Combined': 'B7'},
            {'Background': 'Orange', 'Combined': 'B8'},
            {'Background': 'Orange', 'Combined': 'B9'},
            {'Background': 'Orange', 'Combined': 'B1'},
            {'Background': 'Orange', 'Combined': 'B2'},
            {'Background': 'Orange', 'Combined': 'B3'},
            {'Background': 'Orange', 'Combined': 'B4'},
            {'Background': 'Orange', 'Combined': 'B5'},
            {'Background': 'Orange', 'Combined': 'B6'},
            {'Background': 'Orange', 'Combined': 'B7'},
            {'Background': 'Orange', 'Combined': 'B8'}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
          Routine trial
          Routine halfsecfix
        LoopTerminator NumberBlock1
        Routine BlockRest
      LoopTerminator NumberBlockRepeat1
      LoopInitiator NumberBlockRepeat2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 1
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        LoopInitiator NumberBlock2 loopType="TrialHandler"
          Selected rows = $random(12)*503
          conditionsFile = Task Setup Files/NumberNaming.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
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          Routine trial
          Routine halfsecfix
        LoopTerminator NumberBlock2
        Routine BlockRest
      LoopTerminator NumberBlockRepeat2
    LoopTerminator Runs
  LoopTerminator Run_repeat
